#/tracking/verbose 1
/gamos/setParam GmAnalysisMgr:FileNameSuffix .readCT

/gamos/setParam GmReadPhantomGeometry:FileName world.geom
/gamos/setParam GmReadPhantomGeometry:Phantom:FileName ../testCT.c2.g4dcm

/gamos/geometry GmReadPhantomG4withStGeometry

/gamos/physicsList GmEMPhysics

/gamos/generator GmGenerator

/run/initialize

/gamos/generator/addSingleParticleSource source gamma 1.*MeV

/gamos/generator/directionDist source GmGenerDistDirectionConst 0. 0. -1.
/gamos/generator/positionDist source GmGenerDistPositionDisc 100. 0. -264 -1000.

/gamos/scoring/createMFDetector doseDet phantom
/gamos/scoring/addScorer2MFD doseScorer GmG4PSDoseDeposit doseDet
#/gamos/scoring/addPrinter2Scorer GmPSPrinterSqdose doseScorer
/gamos/setParam sqdosePrt_doseScorer:FileName sqdose.test.c2
/gamos/scoring/printer sqdosePrt GmPSPrinterSqdose
/gamos/scoring/addPrinter2Scorer sqdosePrt doseScorer
/gamos/scoring/addPrinter2Scorer GmPSPrinterCout doseScorer

/gamos/scoring/addScorer2MFD doseScorerStruct GmG4PSDoseDeposit doseDet
/gamos/filter structF GmInPhantomStructureFilter CTV PULMONES
/gamos/scoring/addFilter2Scorer structF doseScorerStruct 
/gamos/setParam sqdosePrtStruct_doseScorerStruct:FileName sqdose.Struct.test.c2
/gamos/scoring/printer sqdosePrtStruct GmPSPrinterSqdose
/gamos/scoring/addPrinter2Scorer sqdosePrtStruct doseScorerStruct
/gamos/scoring/addPrinter2Scorer GmPSPrinterCout doseScorerStruct

/gamos/userAction GmCountTracksUA

/run/beamOn 100000

/gamos/base/printParametersUsage 999
