#/tracking/verbose 1
#/gamos/verbosity GmDNAVerbosity debug

/gamos/setParam GmAnalysisMgr:FileNameSuffix .microyzVol.t
/gamos/setParam GmGeometryFromText:FileName microyzVol.geom
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEmDNAPhysics
#/gamos/GmDNAPhysics/replacePhysics DNA_option2

/gamos/generator GmGenerator
#/geometry/textInput/verbose 99

/run/initialize 

/gamos/physics/userLimits/setMinEKin UL1 * e- 11*eV
#
/process/em/fluo true
/process/em/auger true
/process/em/augerCascade true
/process/em/pixe true
/process/em/deexcitationIgnoreCut true

/process/inactivate e-_G4DNAVibExcitation
/process/inactivate e-_G4DNAAttachment

# *** For Geant4 (condensed history) only ***
#/run/setCut 1 nm
#/cuts/setLowEdge 100 eV
#/process/em/lowestElectronEnergy 100 eV
#/microyz/det/setMaxStepSize 1 nm
# ***

/gamos/generator/addSingleParticleSource source e-  100*keV
positionDist source PosSquare 200*um 0. 0. 20*um 0. 0. 1
directionDist source DirConst 0. 0. -1

/gamos/userAction GmCountProcessesUA
/gamos/setParam GmCountTracksUA:EachNEvent 1000
/gamos/userAction GmCountTracksUA
#
/gamos/random/setSeeds 1112 1112

/P GmMicroyzVolUA:Volume cell
/gamos/userAction GmMicroyzVolUA

#/gamos/physics/userLimits UL1 world * 1e9 1e9 1e9 11*eV

#/control/execute ../../../examples/visVRML2FILE.in
/gamos/userAction GmKillAtStackingActionUA GmSecondaryFilter

/run/beamOn 10000

#/gamos/geometry/printVolumeTree 222
#/gamos/geometry/printTouchables *
