/tracking/verbose 1
/gamos/setParam GmReadPhantomGeometry:FileName linac.geom
#/gamos/setParam GmReadPhantomGeometry:FileName accel.withPhantom.10x10.geom
/gamos/setParam GmSimplePhantomGeometry:MaterialNames G4_WATER G4_LUNG_ICRP G4_BONE_COMPACT_ICRU
/gamos/setParam GmSimplePhantomGeometry:MaterialZVoxels 10 10 80
/gamos/setParam GmSimplePhantomGeometry:MaterialDensities 1. 0.3 1.85
/gamos/setParam GmSimplePhantomGeometry:NVoxels 10 10 100
/gamos/setParam GmSimplePhantomGeometry:PhantomDims -500 500 -500 500 -500 500
/gamos/setParam GmReadPhantomGeometry:InitialDisplacement 0. 0. 1400.
/gamos/setParam GmReadPhantomGeometry:InitialRotAngles 0*deg 0. 0.
/gamos/geometry GmSimplePhantomGeometry

/gamos/physicsList GmEMPhysics

/gamos/generator GmGenerator

/gamos/setParam GmAnalysisMgr:FileNameSuffix EWBS
/gamos/setParam RTPhaseSpaceUA:FileName testEWBS
/gamos/setParam RTPhaseSpaceUA:ZStops 899
/gamos/setParam RTPhaseSpaceUA:KillAfterLastZStop 1
/gamos/userAction RTPhaseSpaceUA 

/gamos/userAction GmCountTracksUA

/gamos/setParam boper:NSplit 10
/gamos/setParam boper:BiasPrimaryOnly 0
/gamos/setParam boper:BiasOnlyOnce 0
/gamos/setParam boper:XDim 400
/gamos/setParam boper:YDim 355
/gamos/physics/biasing/createOperator boper EWBS
/gamos/physics/biasing/EWBS/addParticleProcesses2Oper e- eBrem boper
/gamos/physics/biasing/EWBS/addParticleProcesses2Oper e+ annihil boper
/gamos/physics/biasing/EWBS/addParticleProcesses2Oper gamma compt boper
/gamos/physics/biasing/EWBS/addParticleProcesses2Oper gamma conv boper
/gamos/physics/biasing/EWBS/addParticleProcesses2Oper gamma phot boper

/run/initialize

/gamos/physics/biasing/associateOper2LogVol *target* boper

/gamos/generator/addSingleParticleSource source e- 6.*MeV
/gamos/generator/directionDist source GmGenerDistDirectionConst 0. 0. 1.

/geometry/textInput/verbose 5

/gamos/userAction GmCountProcessesUA

/run/beamOn 100
