### Set the suffix of output files
/gamos/setParam GmAnalysisMgr:FileNameSuffix .exercise1c

### Set geometry, physics and generator
/gamos/setParam GmGeometryFromText:FileName detector.geom
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEMExtendedPhysics
/gamos/generator GmGenerator

### Initialize Geant4 geometry and physics
/run/initialize

/gamos/physics/addPhysics radioactiveDecay

### Set generator particle distributions
/gamos/generator/addSingleParticleSource source1 Co60 0.
/gamos/generator/positionDist source1 GmGenerDistPositionPoint 0. 0. -5*cm

### Set the crystal as sensitive detector
/gamos/analysis/histo1Max *Energy* 3000
/gamos/analysis/histo1NBins *Energy* 300
/gamos/SD/assocSD2LogVol GmSDSimple Calor crystal
### store hits created in the sensitive detector
/gamos/userAction GmHitsHistosUA

### Print a message each 1000 events
/gamos/userAction GmCountTracksUA

### Show the particles created by radioactive decay
/gamos/filter radF GmCreatorProcessFilter RadioactiveDecay 
/gamos/setParam GmTrackDataHistosUA_radF_GmClassifierByParticle:DataList InitialKineticEnergy*1000
/gamos/userAction GmTrackDataHistosUA radF GmClassifierByParticle

### Correlate the angle of the first and second gamma
#/gamos/userAction GmRadDecayGammaAngleCorrelationUA

### Run events
/run/beamOn 10000
