#/tracking/verbose 1
#/gamos/verbosity GmSDVerbosity debug

### Set the suffix of output files
/gamos/setParam GmAnalysisMgr:FileNameSuffix .exercise3c

### Set geometry, physics and generator
/gamos/setParam GmGeometryFromText:FileName ../exercise1/detector.geom
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEMExtendedPhysics
/gamos/generator GmGenerator

### Initialize Geant4 geometry and physics
/run/initialize

/gamos/physics/addPhysics radioactiveDecay

### Set generator particle distributions
/gamos/generator/addSingleParticleSource source Co60[0.0] 0.
/gamos/generator/positionDist source GmGenerDistPositionPoint 0. 0. -1*cm
/gamos/generator/timeDist source GmGenerDistTimeDecay 1E6*Bq
/gamos/userAction GmNoUseG4RadDecayTimeUA

### Set the crystal as sensitive detector
/gamos/analysis/histo1Max *Energy* 3000
/gamos/analysis/histo1NBins *Energy* 300

/gamos/setParam SD:EnergyResol:Detector 0.03
/gamos/setParam SD:MeasuringTime:Detector 10.E-6*second 
/gamos/setParam SD:DeadTime:Detector 100.E-6*second 
/gamos/setParam SD:DeadTimeParalizable:Detector 0
/gamos/SD/assocSD2LogVol GmSDSeparateByTime Detector crystal
/gamos/SD/recHitBuilder GmRecHitBuilderByBlock Detector
/gamos/userAction GmHitsHistosUA
/gamos/userAction GmRecHitsHistosUA

### Print a message each 1000 events
/gamos/userAction GmCountTracksUA

### Plot the time of each particle
/gamos/analysis/histo1Max *Time* 0.02
/gamos/setParam GmTrackDataHistosUA_GmPrimaryFilter:DataList InitialTime/second 
/gamos/userAction GmTrackDataHistosUA GmPrimaryFilter 

/gamos/userAction GmCountProcessesUA

### Run events
/run/beamOn 10000
