### Set the suffix of output files
/gamos/setParam GmAnalysisMgr:FileNameSuffix .exercise4a

### Set geometry, physics and generator
/gamos/setParam GmGeometryFromText:FileName ../exercise2/marinelli_beaker.geom
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEMExtendedPhysics
/gamos/generator GmGenerator

### Initialize Geant4 geometry and physics
/run/initialize

/gamos/physics/addPhysics radioactiveDecay

### Set generator particle distributions
/gamos/generator/addSingleParticleSource source Co60[0.0] 0*MeV
## place source inside the water solution
/gamos/generator/positionDist source GmGenerDistPositionInG4Volumes SOLUTION_*

### Set the Ge as sensitive detector
/gamos/analysis/histo1Max *Energy* 1.5
/gamos/SD/assocSD2LogVol GmSDSimple Detector DETECTOR_Ge
/gamos/userAction GmHitsHistosUA

### Print a message each 1000 events
/gamos/userAction GmCountTracksUA

### Energy spectrum of particles that enter detector, by particle type
/gamos/filter enterDetF GmEnterLogicalVolumeFilter DETECTOR_Ge
/gamos/setParam GmStepDataHistosUA_enterDetF_GmClassifierByParticle:DataList FinalKineticEnergy
/gamos/userAction GmStepDataHistosUA enterDetF GmClassifierByParticle
### Energy spectrum of particles that exit detector, by particle type
/gamos/filter exitDetF GmExitLogicalVolumeFilter DETECTOR_Ge
/gamos/setParam GmStepDataHistosUA_exitDetF_GmClassifierByParticle:DataList FinalKineticEnergy
/gamos/userAction GmStepDataHistosUA exitDetF GmClassifierByParticle
### Particle that suffer Compton interactions before entering detector
/gamos/filter comptonF GmProcessFilter compt
/gamos/filter historyComptonF GmHistoryFilter comptonF
/gamos/setParam GmStepDataHistosUA_enterDetF_historyComptonF:DataList FinalKineticEnergy 
/gamos/userAction GmStepDataHistosUA enterDetF historyComptonF

### Count number of interactions
/gamos/userAction GmCountProcessesUA

### Run events
/run/beamOn 100000
