/gamos/setParam GmAnalysisMgr:FileNameSuffix .exercise4a
/gamos/setParam GmGeometryFromText:FileName ../exercise1/pet.geom
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEMPhysics
/gamos/GmPhysics/replacePhysics gamma-lowener
/gamos/GmPhysics/replacePhysics electron-lowener

/gamos/generator GmGenerator

/gamos/userAction GmCountProcessesUA
/gamos/userAction GmHitsHistosUA
/gamos/userAction GmRecHitsHistosUA

/run/initialize

/gamos/setParam SD:EnergyResol:Calor 0.2
/gamos/setParam SD:MeasuringTime:Calor 1.e-6*s

/gamos/SD/assocSD2LogVol GmSDSimple Calor Crystal
/gamos/SD/recHitBuilder GmRecHitBuilderByBlock Calor 


/gamos/generator/addIsotopeSource source F18 1.E9*becquerel
/gamos/generator/positionDist source GmGenerDistPositionInG4Volumes "water sphere"

/run/beamOn 10000

