# VERBOSITY 
/tracking/verbose 1

# GEOMETRY
/gamos/setParam GmGeometryFromText:FileName ./phantom.geom
/gamos/geometry GmGeometryFromText

# PHYSICS
/gamos/physicsList G4QGSP_BIC_HP

# PRIMARY GENERATOR
/gamos/generator GmGenerator

# GEANT4 INITIALISATION
/run/initialize

# ACTIVATE DECAYS
/gamos/physics/addPhysics decay
/gamos/physics/addPhysics radioactiveDecay

# SOURCE
/control/execute ./pbsSource.in

# STATISTICS
/gamos/userAction GmCountTracksUA

#---------- exercise 0b ----------
# FILTER "IN PHANTOM"
/gamos/filter inPhantomFilter GmInLogicalVolumeFilter phantom

# COUNT PROCESSES AND PARTICLES IN THE PHANTOM
/gamos/userAction GmCountProcessesUA inPhantomFilter

# VISUALIZATION
/control/execute ./visVRML2FILE.in
#---------------------------------

# RUN SIMULATION
/run/beamOn 20
