# VERBOSITY 
/tracking/verbose 0

# GEOMETRY
/gamos/setParam GmGeometryFromText:FileName ../exercise0/phantom.geom
/gamos/geometry GmGeometryFromText

#---------- exercise 1c ----------
# PHYSICS
/gamos/physicsList HadrontherapyPhysics
/HT/Physics/addPhysics QGSP_BIC_EMY
#---------------------------------

# PRIMARY GENERATOR
/gamos/generator GmGenerator

# GEANT4 INITIALISATION
/run/initialize

#---------- exercise 1c ----------
# DECAY PROCESSES ARE INCLUDED TO HadronTherapyPhysics
#---------------------------------

# SOURCE
/control/execute ../exercise0/pbsSource.in

# STATISTICS
/gamos/userAction GmCountTracksUA

#---------- exercise 1c ----------
# FILTER "IN PHANTOM"
/gamos/filter inPhantomFilter GmInLogicalVolumeFilter phantom

# FILTER "IN PHANTOM & ONLY SECONDARIES"
/gamos/filter secondariesInPhantomFilter GmANDFilter inPhantomFilter GmSecondaryFilter

# COUNT SECONDARY PARTICLES IN PHANTOM
/gamos/userAction GmCountProcessesUA secondariesInPhantomFilter
#---------------------------------

# RUN  SIMULATION
/run/beamOn 1000
