# VERBOSITY 
/tracking/verbose 0

#---------- exercise 4c ----------
# RANDOM SEED
/gamos/random/setSeeds 0 1
#---------------------------------

# GEOMETRY
/gamos/setParam GmGeometryFromText:FileName ./detector.geom
/gamos/geometry GmGeometryFromText

# PHYSICS
/gamos/physicsList G4QGSP_BIC_AllHP

# PRIMARY GENERATOR
/gamos/generator GmGenerator

# GEANT4 INITIALISATION
/run/initialize

# ACTIVATE  DECAYS
/gamos/physics/addPhysics radioactiveDecay

#---------- exercise 4c ----------
# SOURCE
/gamos/generator/addSingleParticleSource source proton 226.62*MeV
/gamos/generator/energyDist source GmGenerDistEnergyConstant 226.62*MeV
/gamos/generator/positionDist source GmGenerDistPositionDisc 1.5*mm 0. 0. -400.*mm
/gamos/generator/directionDist source GmGenerDistDirectionCone 0. 0. 1. 3.6*mrad
/gamos/generator/timeDist source GmGenerDistTimeConstant 0
#---------------------------------

# STATISTICS
/gamos/userAction GmCountTracksUA

#---------- exercise 4c ----------
# FILTER
/gamos/filter enterDetectorFilter GmEnterLogicalVolumeFilter detector

# HISTOGRAMMING
/gamos/setParam GmStepDataHistosUA_enterDetectorFilter_GmClassifierByParticle:FileName FinalTime_enterDet
/gamos/setParam GmStepDataHistosUA_enterDetectorFilter_GmClassifierByParticle:DataList FinalTime
/gamos/analysis/histo1Max GmStepDataHistosUA_enterDetectorFilter_GmClassifierByParticle:*:FinalTime 50
/gamos/analysis/histo1NBins GmStepDataHistosUA_enterDetectorFilter_GmClassifierByParticle:*:FinalTime 1000
/gamos/userAction GmStepDataHistosUA enterDetectorFilter GmClassifierByParticle

# RUN  SIMULATION
/run/beamOn 1
#---------------------------------