/tracking/verbose 1

/gamos/setParam GmGeometryFromText:FileName exercise3.geom
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEMPhysics

/gamos/generator GmGenerator

/gamos/userAction GmCountProcessesUA

/run/initialize

/gamos/generator/addSingleParticleSource source gamma 10.*MeV
/gamos/generator/positionDist source Exer2GenerDistPosition  1.*cm
/gamos/generator/directionDist source GmGenerDistDirectionConst 1. 0. 0.

/run/verbose 1

/gamos/physics/userLimits/setMaxStep UL1 Crystal e- 1.*mm

#/control/execute ../../../examples/visOGLIX.in
/control/execute ../../../examples/visVRML2FILE.in
#/control/execute ../../../examples/visDAWNFILE.in

/run/beamOn 10

