/tracking/verbose 1

/gamos/setParam GmReadPhantomGeometry:FileName world.geom
/gamos/setParam GmSimplePhantomGeometry:MaterialNames G4_WATER G4_LUNG_ICRP G4_BONE_COMPACT_ICRU
/gamos/setParam GmSimplePhantomGeometry:MaterialZVoxels 10 10 80
/gamos/setParam GmSimplePhantomGeometry:MaterialDensities 1. 1.  1.
/gamos/setParam GmSimplePhantomGeometry:NVoxels 1000 1000 100
/gamos/setParam GmSimplePhantomGeometry:PhantomDims -500 500 -500 500 -500 500
/gamos/setParam GmReadPhantomGeometry:InitialDisplacement 0. 0. 0.
/gamos/setParam GmReadPhantomGeometry:InitialRotAngles 0*deg 0. 0.

/gamos/geometry GmSimplePhantomGeometry

/geometry/textInput/verbose 5

/gamos/physicsList GmEMPhysics

/P GmReadPhantomGeometry:Phantom:SkipEqualMaterials 1
/gamos/generator GmGenerator

/run/initialize

/gamos/generator/addSingleParticleSource source e- 1.


/gamos/scoring/createMFDetector doseDet phantom
/gamos/scoring/addScorer2MFD doseScorer GmG4PSDoseDeposit doseDet
/gamos/scoring/addPrinter2Scorer GmPSPrinterCout doseScorer


/run/beamOn 10

