/gamos/verbosity GmScoringVerbosity debug
/gamos/setParam GmAnalysisMgr:FileNameSuffix .exercise4b.Dose

/gamos/setParam GmReadPhantomGeometry:FileName ../exercise3/world.geom
/gamos/setParam GmSimplePhantomGeometry:MaterialNames G4_WATER 
/gamos/setParam GmSimplePhantomGeometry:MaterialZVoxels 10 
/gamos/setParam GmSimplePhantomGeometry:MaterialDensities 1.
/gamos/setParam GmSimplePhantomGeometry:NVoxels 10 10 10
/gamos/setParam GmSimplePhantomGeometry:PhantomDims -500 500 -500 500 -500 500
/gamos/setParam GmReadPhantomGeometry:InitialDisplacement 0. 0. -1400.
/gamos/setParam GmReadPhantomGeometry:InitialRotAngles 0*deg 0. 0.

/gamos/geometry GmSimplePhantomGeometry

/gamos/physicsList GmEMPhysics

/gamos/setParam RTGeneratorPhaseSpace:FileName test_-899
/gamos/setParam RTGeneratorPhaseSpace:InitialDisplacement 0. 0. 0.
/gamos/setParam RTGeneratorPhaseSpace:InitialRotAngles 0. 0. 0.*deg 
/gamos/setParam RTGeneratorPhaseSpace:MaxNReuse 10

/gamos/generator RTGeneratorPhaseSpace

/run/initialize

/gamos/scoring/createMFDetector doseDet phantom
/gamos/scoring/addScorer2MFD doseScorer GmG4PSPopulation doseDet
/gamos/scoring/addPrinter2Scorer GmPSPrinterCout doseScorer
/gamos/setParam GmPSPrinterSqdose_doseScorer:FileName sqdose_899.out
/gamos/scoring/addPrinter2Scorer GmPSPrinterSqdose doseScorer

/gamos/userAction GmCountTracksUA

/tracking/verbose 1
/run/beamOn 15
